PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = MovieTask
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Routines
  Routine trial
    MovieComponent movie
      backend = moviepy
      durationEstim = 8*60
      forceEndRoutine = True
      movie = /Users/joebathelt/Documents/1_Projects/Loneliness_EEG/experiment/movieTask/bangbangyouredead_v2 corrected.mov
      startVal [time (s)] = 0.0
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  Routine instructions
    TextboxComponent intro_message
      bold = False
      durationEstim = 2.0
      editable = False
      letterHeight = 0.05
      size = (0.75, 0.50)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Movie Task!

        Please watch the following short movie. This task takes about 8 minutes.

        Press SPACE to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      durationEstim = 2.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextboxComponent leaving_message
      bold = False
      durationEstim = 2.00
      editable = False
      letterHeight = 0.05
      size = (0.75, 0.50)
      startVal [time (s)] = 0.0
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      text:
        Thank you for watching.

        Please fill in the <b>ARSQ questionnaire</b> now.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      durationEstim = 2.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine trial
  Routine end
