PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = iMac
  Screen = 1
  Units = deg
  Use version = latest
  Window size (pixels) = [800, 800]
  color = #bfbfbf
  expName = RovingOddball
  keyboardBackend = ioHub
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Routines
  Routine trial
    ParallelOutComponent face_stim_port
      address = 0x0378
      register = EIO
      startData = trigger_code
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent cross_port
      address = 0x0378
      register = EIO
      startData = 20
      startVal [time (s)] = 0.15
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        print(trigger_code)
      Each Frame:
        if main_key_response.keys == 'space':
            print('press')
    ImageComponent face
      image [set every repeat] = $stimulus
      pos = (0, 0.0)
      size = (5.7, 8.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
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    PolygonComponent polygon_4
      fillColor [set every repeat] = $colour
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    PolygonComponent polygon_2
      fillColor = black
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.55
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    KeyboardComponent main_key_response
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.00
      stopVal [duration (s)] = 0.70
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  Routine practice
    ParallelOutComponent constant_cross_port
      address = 0x0378
      register = EIO
      startData = 20
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent changing_cross_port
      address = 0x0378
      register = EIO
      startData = trigger_code
      startVal [time (s)] = 0.15
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if key_response.keys == 'space':
            print('press')
    PolygonComponent polygon
      fillColor [set every repeat] = $colour
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.00
      stopVal [duration (s)] = 0.15
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    PolygonComponent polygon_3
      fillColor = black
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.55
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    KeyboardComponent key_response
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.00
      stopVal [duration (s)] = 0.70
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  Routine feedback
    ParallelOutComponent training_feedback
      address = 0x0378
      register = EIO
      startData = 200
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent practiceFeedback
      Code Type = Py
      Before Experiment:
        n_practice = 30
      Begin Experiment:
        practice_hits = 0
        practice_misses = 0
        practice_correctRejects = 0
        practice_falseAlarms = 0
        trial_counter = 0
        msg = ''
        feedback_onset = 0.0
        feedback_offset = 0.00
      Begin Routine:
        # Count number of correct responses
        if (trial_type == 'response') & (key_response.keys == 'space'):
            practice_hits += 1
            trial_counter += 1
        if (trial_type == 'no_response') & (key_response.keys == 'space'):
            practice_falseAlarms += 1
            trial_counter += 1
        if (trial_type == 'response') & (key_response.keys != 'space'):
            practice_misses += 1
            trial_counter += 1
        if (trial_type == 'no_response') & (key_response.keys != 'space'):
            practice_correctRejects += 1
            trial_counter += 1

        if (trial_counter % 10) == 0: # provide feedback every 10 trials
            percent_correct = round(100*(practice_hits + practice_correctRejects)/(trial_counter), 0)
            if percent_correct > 80:
                msg = 'Well done! You got ' + str(int(percent_correct)) + '% correct'
            if percent_correct < 80:
                msg = 'You can do better! You got '+  str(int(percent_correct)) + '% correct'
                n_practice += 10
            feedback_onset = 0.0
            feedback_offset = 0.75
        else:
            msg = ''
            feedback_onset = 0.0
            feedback_offset = 0.00
    TextComponent feedback_message
      durationEstim = 0.75
      letterHeight = 1
      startEstim = 0.00
      startVal [time (s)] = $feedback_onset
      stopVal [duration (s)] = $feedback_offset
      text [set every repeat] = $msg
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  Routine initialise_variables
  Routine main_feedback
    ParallelOutComponent feedback_port
      address = 0x0378
      register = EIO
      startData = 200
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        main_hits = 0
        main_correctRejects = 0
        main_misses = 0
        main_falseAlarms = 0
        break_onset = 0.0
        break_duration = 0.0
        main_feedback_duration = 0.0
        feedback_response_duration = 0.0
      Begin Routine:
        # Count number of correct responses
        # Hit
        if (trial_type == 'response') & (key_response.keys == 'space'):
            main_hits += 1
            trial_counter += 1
        # False Alarm
        if (trial_type == 'no_response') & (key_response.keys == 'space'):
            main_falseAlarms += 1
            trial_counter += 1
        # Miss
        if (trial_type == 'response') & (key_response.keys != 'space'):
            main_misses += 1
            trial_counter += 1
        # Correct Reject
        if (trial_type == 'no_response') & (key_response.keys != 'space'):
            main_correctRejects += 1
            trial_counter += 1

        if (trial_counter % 315) == 0: # provide feedback every 315 trials
            percent_correct = round(100*(main_hits + main_correctRejects)/(trial_counter), 0)
            msg = 'Time for a break! In this block, you got ' + str(int(percent_correct)) + '% correct \n Press SPACE to continue'
            main_feedback_duration = 10*60 # button press ends this earlier
            feedback_response_duration = 10*60

            # Reset the counters
            main_hits = 0
            main_correctRejects = 0
            main_misses = 0
            main_falseAlarms = 0
            trial_counter = 0
        else:
            msg = ''
            main_feedback_duration = 0.00
            feedback_response_duration = 0.00
    TextComponent break_feedback
      color = black
      durationEstim = 2.0
      letterHeight = 1
      startEstim = 0.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $main_feedback_duration
      text [set every repeat] = $msg
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    KeyboardComponent main_feedback_response
      allowedKeys = 'space'
      durationEstim = 2.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_response_duration
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  Routine break_2
    TextComponent text
      color = black
      letterHeight = 1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.15
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  Routine intro
    ParallelOutComponent intro_port
      address = 0x0378
      register = EIO
      startData = 101
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent intro_code
      Code Type = Py
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      Each Frame:
        if intro_key.keys == 'space':
            print('press')
            #intro_port.set_data(0)
    TextboxComponent textbox
      bold = False
      color = black
      durationEstim = 2.00
      editable = False
      letterHeight = 0.03
      size = (1.0, 0.5)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the Oddball Task!

        You will see a cross in the centre of the screen.

        Press <b>SPACE</b> whenever the cross changes colour.

        Respond as fast as possible without making any mistakes.


        Press SPACE to continue.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      durationEstim = 2.00
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    CodeComponent code_4
      Code Type = Py
      Each Frame:
        if end_task.keys == 'space':
            print(end)
    ParallelOutComponent end_port
      address = 0x0378
      register = EIO
      startData = 101
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.03
      syncScreen = True
      syncScreenRefresh = False
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    TextboxComponent end_message
      bold = False
      durationEstim = 2.00
      editable = False
      letterHeight = 0.05
      size = (1.0, 0.5)
      startVal [time (s)] = 0.0
      text = That’s it. Thank you for completing the task!
      units = height
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    KeyboardComponent end_task
      allowedKeys = 'space'
      durationEstim = 2.00
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice_conditions.csv
    loopType = random
    nReps = 0
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    conditions:
      [OrderedDict([('trial_type', 'response'), ('colour', 'red')]),
      OrderedDict([('trial_type', 'no_response'), ('colour', 'black')])]
    Routine practice
    Routine feedback
  LoopTerminator practice_trials
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_022_y_f_h_a.jpg'), ('colour', 'white'), ('repetition', 1), ('trigger_code', 41)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_022_y_f_h_a.jpg'), ('colour', 'white'), ('repetition', 2), ('trigger_code', 42)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_022_y_f_h_a.jpg'), ('colour', 'white'), ('repetition', 3), ('trigger_code', 43)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_022_y_f_h_a.jpg'), ('colour', 'red'), ('repetition', 4), ('trigger_code', 34)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_022_y_f_h_a.jpg'), ('colour', 'white'), ('repetition', 5), ('trigger_code', 45)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_008_y_m_a_a.jpg'), ('colour', 'white'), ('repetition', 1), ('trigger_code', 21)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_008_y_m_a_a.jpg'), ('colour', 'white'), ('repetition', 2), ('trigger_code', 22)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_008_y_m_a_a.jpg'), ('colour', 'red'), ('repetition', 3), ('trigger_code', 13)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_008_y_m_a_a.jpg'), ('colour', 'white'), ('repetition', 4), ('trigger_code', 24)]),
      OrderedDict([('stimulus', 'SHINE_processed_stimuli/SHINEd_008_y_m_a_a.jpg'), ('colour', 'white'), ('repetition', 5), ('trigger_code', 25)])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
    Routine trial
    Routine main_feedback
  LoopTerminator trials
  Routine end
